CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:28
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "signal")
    Name to assign these images:OrigSignal
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify nuclei in the DAPI image, but exclude those that touch edge of image (“Nuclei”).']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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):120,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Identify nuclei in the DAPI image, including those that touch edge of image (preNucleiWithEdges).']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
    Select the input image:DNA
    Name the primary objects to be identified:preNucleiWithEdges
    Typical diameter of objects, in pixel units (Min,Max):100,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
ExpandOrShrinkObjects:[module_num:7|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notes:['Expand preNucleiWithEdges (NucleiWithEdges)']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
    Select the input objects:preNucleiWithEdges
    Name the output objects:NucleiWithEdges
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:20
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
MaskImage:[module_num:8|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notes:['Remove nuclear (NucleiWithEdges) regions from “signal” image, producing ‘MaskSignal’ image.']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
    Select the input image:OrigSignal
    Name the output image:MaskSignal
    Use objects or an image as a mask?:Objects
    Select object for mask:NucleiWithEdges
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    Invert the mask?:Yes

MaskImage:[module_num:9|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notes:['Remove nuclear (Nuclei) regions from “signal” image, producing ‘Signal_in_Nuclei’ image.']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
    Select the input image:OrigSignal
    Name the output image:Signal_in_Nuclei
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:10|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notes:['Identify bright background signals in ‘MaskSignal’ image (background_foci).']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
    Select the input image:MaskSignal
    Name the primary objects to be identified:background_foci
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
ExpandOrShrinkObjects:[module_num:11|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notes:['Expand “background_foci” (focalBackground).']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
    Select the input objects:background_foci
    Name the output objects:focalBackground
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:20
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
MaskImage:[module_num:12|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notes:['Add an additional mask to ‘MaskSignal” using expanded background foci (debrisSignalMask).']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
    Select the input image:MaskSignal
    Name the output image:debrisSignalMask
    Use objects or an image as a mask?:Objects
    Select object for mask:focalBackground
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:13|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notes:['Identify nuclear signals (FISH signals).']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
    Select the input image:Signal_in_Nuclei
    Name the primary objects to be identified:FISHsignals
    Typical diameter of objects, in pixel units (Min,Max):7,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:.9
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
MaskImage:[module_num:14|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notes:['Mask FISHsignals in input signal image (signalMaskedforFISH).']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
    Select the input image:OrigSignal
    Name the output image:signalMaskedforFISH
    Use objects or an image as a mask?:Objects
    Select object for mask:FISHsignals
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    Invert the mask?:Yes

MaskImage:[module_num:15|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notes:['Mask ‘Nuclei’ in signalMaskedforFISH image keeping only nuclei (MaskSignal_noInv).']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
    Select the input image:signalMaskedforFISH
    Name the output image:MaskSignal_noInv
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

IdentifySecondaryObjects:[module_num:16|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notes:['Identify cell bodies in ‘signalMaskedforFISH’ image growing form ‘NucleiWithEdges’ (CellBodies).']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
    Select the input objects:NucleiWithEdges
    Name the objects to be identified:CellBodies
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:signalMaskedforFISH
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
ExpandOrShrinkObjects:[module_num:17|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notes:['Expand ‘CellBodies’ objects (expandedCellBodies).']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
    Select the input objects:CellBodies
    Name the output objects:expandedCellBodies
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:20
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
Threshold:[module_num:18|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notes:['Use a threshold to futher supress cellular background and random noise (Threshold).']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
    Select the input image:debrisSignalMask
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
MaskImage:[module_num:19|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notes:['Use ‘expandedCellBodies’ to mask  ‘debrisSignalMask’ (expandedSignalMask).']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
    Select the input image:debrisSignalMask
    Name the output image:expandedSignalMask
    Use objects or an image as a mask?:Objects
    Select object for mask:expandedCellBodies
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    Invert the mask?:Yes

MaskImage:[module_num:20|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notes:['Use ‘Threshold’ to expand mask even futher (finalSignalMask).']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
    Select the input image:expandedSignalMask
    Name the output image:finalSignalMask
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold
    Invert the mask?:Yes

IdentifySecondaryObjects:[module_num:21|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notes:['Idenitfy nuclei in signal channel using ‘Nuclei’ objects and ‘MaskSignal_noInv’ image (NuclearBackgroundSignal).']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
    Select the input objects:Nuclei
    Name the objects to be identified:NuclearBackgroundSignal
    Select the method to identify the secondary objects:Propagation
    Select the input image:MaskSignal_noInv
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
MeasureImageIntensity:[module_num:22|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notes:['Measure itensity of ‘finalSignalMask’ image to get itensity of “background” pixels (FISH signals, nuclei, cell bodies, and debris exlcuded by masking).']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
    Select the image to measure:finalSignalMask
    Measure the intensity only from areas enclosed by objects?:No
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
MeasureObjectIntensity:[module_num:23|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notes:['Measure itensity of NulcearBackgroundSignal objects in signal channel (MaskSignal_noInv).']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
    Hidden:1
    Select an image to measure:MaskSignal_noInv
    Select objects to measure:NuclearBackgroundSignal

MeasureObjectIntensity:[module_num:24|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notes:['Measure intensity of FISHsignals in OrigSignal image.']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
    Hidden:1
    Select an image to measure:OrigSignal
    Select objects to measure:FISHsignals

RelateObjects:[module_num:25|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notes:['Create a parent-child relationship between the NuclearBackgroundSignal and FISHsignals objects, allowing the per-nucleus signal:noise to be later computed.']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
    Parent objects:NuclearBackgroundSignal
    Child objects:FISHsignals
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
OverlayOutlines:[module_num:26|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notes:['Create new image files showing the results of the segmentation of ‘NuclearBackgroundSignal’ and ‘FISHsignals’ objects.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigSignal
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#3BFF20
    Select objects to display:NuclearBackgroundSignal
    Select outline color:#CF17BC
    Select objects to display:FISHsignals

SaveImages:[module_num:27|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notes:['Savely newly created images from previous step.']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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigSignal
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_segmentation
    Saved file format:png
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:28|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notes:['Output relevant data to .csv file.']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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|E:\\\\\\\\Data2\\\\\\\\Brian\\\\\\\\171121.dotCounts\\\\\\\\GN
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:FISHsignals|Intensity_IntegratedIntensity_OrigSignal,FISHsignals|Intensity_MeanIntensity_OrigSignal,FISHsignals|Parent_NuclearBackgroundSignal,FISHsignals|Number_Object_Number,Image|Intensity_MeanIntensity_finalSignalMask,NuclearBackgroundSignal|Intensity_IntegratedIntensity_MaskSignal_noInv,NuclearBackgroundSignal|Intensity_MeanIntensity_MaskSignal_noInv,NuclearBackgroundSignal|Children_FISHsignals_Count
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:GN_FISH_
    Overwrite existing files without warning?:No
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